PsychoPy2experiment version="2026.1.3"
Settings
  Audio lib = ptb
  Experiment info = {"participant":"f\"{randint(0, 999999):06.0f}\""}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = (1920, 1080)
  colPriority = {"thisRow.t":"priority.CRITICAL","expName":"priority.LOW"}
  color = black
  expName = male_first_experiment
  keyboardBackend = PsychToolbox
  measureFrameRate = False
  runMode = 0
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Routines
  Routine welcomeRoutine
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    TextComponent welcomeText
      letterHeight = 0.05
      startVal [time (s)] = 0
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      text:
        In this study you will listen to short recordings of speakers and judge how strongly they speak with vocal fry.

        You will first complete a short introduction to become familiar with the concept of vocal fry and with the task, which is followed by the main part of the experiment.

        Please put on your headphones now and make sure the volume is at a comfortable level.
    ButtonComponent continueBtn
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      pos = 0,-0.4
      size = 0.3,0.08
      startVal [time (s)] = 0
      text = Continue
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  Routine introTrial
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    CodeComponent introLogic
      Code Type = JS
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      Begin JS Routine:
        autoPlayed = false;
        nPlays = 0;
        continueBtn_2.opacity = 0.35;
      Each JS Frame:
        if (!autoPlayed && t >= 0.3) {
            introSound.play();
            autoPlayed = true;
            nPlays += 1;
        }
        // play the sound once per space press
        if (key_space_3.getKeys({keyList: ['space'], waitRelease: false}).length > 0) {
            introSound.play();
            nPlays += 1;
        }
        continueBtn_2.opacity = (nPlays > 0) ? 1.0 : 0.35;
        if (continueBtn_2.isClicked && nPlays > 0) {
            continueRoutine = false;
        }
      End JS Routine:
        introSound.stop();
    SoundComponent introSound
      forceEndRoutine = False
      sound [set every repeat] = $introFile
      startVal [condition] = false
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    TextComponent introductionText
      letterHeight = 0.05
      pos = [0,0.2]
      startVal [time (s)] = 0
      text [set every repeat] = $introText
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    ButtonComponent continueBtn_2
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      pos = 0,-0.4
      size = 0.3,0.08
      startVal [time (s)] = 0
      text = Continue
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    KeyboardComponent key_space_3
      allowedKeys = 'space'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent introHint
      letterHeight = 0.02
      startVal [time (s)] = 0.0
      text = Press SPACE to replay the recording. You may replay it as many times as you like.
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  Routine trainingRoutine
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        You will now hear pairs of similar-sounding syllables which have been synthesized. Some contain no vocal fry at all and other contain very strong vocal fry.

        Read the label and look where the arrow points, then click that spot on the scale. Once you’ve selected the highlighted spot, click Continue to move on to the next sound.
    ButtonComponent continueBtn_3
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      pos = 0,-0.4
      size = 0.3,0.08
      startVal [time (s)] = 0
      text = Continue
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  Routine trainingTrial
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    CodeComponent trainingLogic
      Code Type = JS
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      Begin JS Routine:
        correct = false;
        selection = "";
        nPlays = 0;
        autoPlayed = false;
        feedbackMsg = "";
        arrowPos = (stimType === "modal") ? [-0.5, -0.015] : [0.5, -0.015];
        labelText = (stimType === "modal") ? "There is NO vocal fry at all." : "There is VERY STRONG vocal fry.";
      Each JS Frame:
        if (!autoPlayed && t >= 0.3) {
            trainSound.play();
            autoPlayed = true;
            nPlays += 1;
        }

        // play the sound once per space press
        if (key_space.getKeys({keyList: ['space'], waitRelease: false}).length > 0) {
            trainSound.play();
            nPlays += 1;
        }

        rating = trainSlider.getRating();
        if (rating !== undefined && rating !== null) {
            selection = "slider";
        }

        // scoring
        if (selection === "slider" && nPlays > 0) {
            if (stimType === "modal") {
                correct = (rating <= 10);
            } else if (stimType === "creaky") {
                correct = (rating >= 90);
            } else {
                correct = false;
            }
        } else {
            correct = false;
        }

        // feedback
        feedbackMsg = (!selection) ? "" : (correct ? "You may now continue to the next syllable!" : "Play the syllable and try again.");
        feedbackText.color = (correct ? "green" : "red");
        continueBtn_4.opacity = (correct ? 1.0 : 0.35);

        if (continueBtn_4.isClicked && correct) {
            continueRoutine = false;
        }
      End JS Routine:
        trainSound.stop();
        psychoJS.experiment.addData('nPlays', nPlays);
    MouseComponent mouse
      forceEndRoutineOnPress = never
      saveMouseState = never
      saveParamsClickable [set every repeat] = name,
      startVal [time (s)] = 0.0
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    SoundComponent trainSound
      forceEndRoutine = False
      sound [set every repeat] = $trainFile
      startVal [condition] = false
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    SliderComponent trainSlider
      fillColor = green
      font = Noto Sans
      forceEndRoutine = False
      granularity = 0
      labels = "No vocal fry", "Very strong \nvocal fry"
      letterHeight = 0.05
      pos = (0.0, -0.15)
      size = (1, 0.05)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (0,100)
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    PolygonComponent arrowShape
      fillColor = yellow
      lineColor = yellow
      pos [set every repeat] = $arrowPos
      shape = custom polygon...
      size = (1, 1)
      startVal [time (s)] = 0.0
      vertices = [(-0.01, 0.075), (0.01, 0.075), (0.01, -0.025), (0.03, -0.025), (0, -0.075), (-0.03, -0.025), (-0.01, -0.025)]
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    TextComponent trainLabel
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text [set every repeat] = $labelText
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    TextComponent feedbackText
      letterHeight = 0.05
      pos = (0, 0.15)
      startVal [time (s)] = 0.0
      text [set every frame] = $feedbackMsg
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    ButtonComponent continueBtn_4
      bold = True
      forceEndRoutine = False
      letterHeight = 0.05
      pos = 0,-0.4
      size = 0.3,0.08
      startVal [time (s)] = 0
      text = Continue
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    TextComponent trialText
      letterHeight = 0.02
      pos = (0, 0.25)
      startVal [time (s)] = 0.0
      text = Press SPACE to replay the syllable. You can replay it as many times as you like.
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    KeyboardComponent key_space
      allowedKeys = 'space'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine mainRoutine
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    TextComponent mainInstructions
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Now begins the main part of the experiment.

        You will listen to a series of syllables. After each one, rate whether you hear vocal fry in the sound, and if so, how strong the vocal fry is.

        Remember, there is no right or wrong answer.
    ButtonComponent continueBtn_6
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      pos = 0,-0.4
      size = 0.3,0.08
      startVal [time (s)] = 0
      text = Continue
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  Routine mainTrial
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    CodeComponent mainLogic
      Code Type = JS
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      Begin JS Experiment:
        trialCounter = 0;
        totalTrials = 88;
      Begin JS Routine:
        trialCounter += 1;
        counterText = `${trialCounter} / ${totalTrials}`;
        rating = 0;
        response_given = false;
        rt_clock = new util.Clock();

        nPlays = 0;
        maxPlays = 2;
        replay_used = false;
        autoPlayed = false;

        console.log('Trial file:', stimFile);
      Each JS Frame:
        if (!autoPlayed && t >= 0.3) {
            mainSound.play();
            autoPlayed = true;
            nPlays += 1;
        }

        // replay via SPACE, limited to one
        if (nPlays < maxPlays && key_space_2.getKeys({keyList: ['space'], waitRelease: false}).length > 0) {
            mainSound.play();
            nPlays += 1;
            replay_used = true;
        }

        // response

        slider_rating = mainSlider.getRating();

        if (slider_rating !== undefined && slider_rating !== null && nPlays > 0) {
            rating = slider_rating;
            response_given = true;
        } else {
            response_given = false;
        }

        continueBtn_5.opacity = (response_given ? 1.0 : 0.35);

        if (continueBtn_5.isClicked && response_given) {
            psychoJS.experiment.addData("rating", rating);
            psychoJS.experiment.addData("rt_sec", util.round(rt_clock.getTime(), 4));
            psychoJS.experiment.addData("replay_used", replay_used);
            psychoJS.experiment.addData("nPlays", nPlays);
            continueRoutine = false;
        }
      End JS Routine:
        mainSound.stop()
    SoundComponent mainSound
      forceEndRoutine = False
      sound [set every repeat] = $stimFile
      startVal [condition] = false
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    MouseComponent mouse_2
      forceEndRoutineOnPress = never
      saveMouseState = never
      saveParamsClickable [set every repeat] = name,
      startVal [time (s)] = 0.0
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    SliderComponent mainSlider
      fillColor = green
      font = Noto Sans
      forceEndRoutine = False
      granularity = 0
      labels = "No vocal fry", "Very strong \nvocal fry"
      letterHeight = 0.05
      pos = (0.0, -0.15)
      size = (1, 0.05)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (0,100)
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    ButtonComponent continueBtn_5
      bold = True
      forceEndRoutine = False
      letterHeight = 0.05
      pos = 0,-0.4
      size = 0.3,0.08
      startVal [time (s)] = 0
      text = Continue
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    TextComponent trialCounterText
      color = grey
      letterHeight = 0.03
      pos = (0, 0.45)
      startVal [time (s)] = 0.0
      text [set every repeat] = $counterText
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    TextComponent mainText
      letterHeight = 0.05
      pos = (0, 0.25)
      startVal [time (s)] = 0.0
      text = Select whether you hear vocal fry, and if yes, how strong it is.
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    TextComponent spaceHint
      letterHeight = 0.02
      pos = (0, 0.15)
      startVal [time (s)] = 0.0
      text = Press SPACE to replay the syllable. You can only replay it once.
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    KeyboardComponent key_space_2
      allowedKeys = 'space'
      forceEndRoutine = False
      startVal [time (s)] = 0
      store = nothing
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  Routine breakScreen
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    CodeComponent breakLogic
      Code Type = Auto->JS
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      Begin Routine:
        show_break = (trialCounter == 44)
        if not show_break:
            continueRoutine = False
    TextComponent breakText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Please, take a short break before the second part of th experiment.

        Click Continue when you’re ready.
    ButtonComponent breakContinueButton
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0, -0.4)
      size = 0.3,0.08
      startVal [time (s)] = 0
      text = Continue
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  Routine thankYouScreen
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    CodeComponent code_2
      Code Type = Both
      Begin JS Routine:
        psychoJS._saveResults = 0;
        let filename = psychoJS._experiment._experimentName + "_" + psychoJS._experiment._datetime + ".csv";
        let dataObj = psychoJS._experiment._trialsData;
        let data = [Object.keys(dataObj[0])].concat(dataObj).map(it => {
            return Object.values(it).toString()
        }).join('\n')

        console.log('Saving data...');
        fetch("https://pipe.jspsych.org/api/data/", {
          method: "POST",
          headers: {
            "Content-Type": "application/json",
            Accept: "*/*",
          },
          body: JSON.stringify({
            experimentID: "3X3aBX0VpoTG",
            filename: filename,
            data: data,
          }),
        }).then(response => response.json()).then(data => {
            console.log(data);
            // Redirect participant back to Prolific to confirm completion
            window.location.href = "https://app.prolific.com/submissions/complete?cc=C139REZF";
        }).catch(error => {
            console.error('Error saving data:', error);
            // Still redirect so the participant isn't stranded
            window.location.href = "https://app.prolific.com/submissions/complete?cc=C139REZF";
          });
    TextComponent thankYouText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Thank you! The experiment has been completed.

        Please wait 5 seconds while your results are being saved.

        Then, click the button below to be redirected back to Prolific.
    ButtonComponent closeButton
      bold = True
      forceEndRoutine = True
      letterHeight = 0.03
      pos = (0, -0.4)
      size = 0.5,0.08
      startVal [time (s)] = 5
      text = Finish experiment
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  Routine surveyRoutine
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    CodeComponent surveyLogic
      Code Type = Auto->JS
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      Each Frame:
        formData = surveyForm.getData()
        all_required_answered = True
        is_required = True
        resp = ''
        answered = True

        for item in formData:
            if item['type'] in ('heading', 'description'):
                continue
            is_required = item['required'] not in (0, '0', False, 'False', 'false')
            if not is_required:
                continue
            resp = item['response']
            if item['type'] == 'free text':
                answered = True if resp else False
            else:
                answered = True if (resp == 0 or resp) else False
            if not answered:
                all_required_answered = False
                break

        submitBtn.opacity = 1.0 if all_required_answered else 0.35
        if submitBtn.isClicked and all_required_answered:
            continueRoutine = False
    FormComponent surveyForm
      Data Format = rows
      Font = Arial
      Item Padding = 0.05
      Items = conditions/survey.xlsx
      Randomize = False
      Style = light
      Text Height = 0.025
      borderColor = white
      fillColor = white
      itemColor = black
      markerColor = red
      pos = (0, 0.05)
      responseColor = black
      size = (1.4, 0.8)
      startVal [time (s)] = 0.0
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    ButtonComponent submitBtn
      bold = True
      forceEndRoutine = False
      letterHeight = 0.05
      pos = (0, -0.42)
      size = (0.3, 0.08)
      startVal [time (s)] = 0
      text = Submit
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  Routine mainFinished
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    TextComponent mainFinishedText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        You have finished the main experiment!

        Now, you will be asked to answer a few survey questions.

        Click the button below to continue.
    ButtonComponent mainFinishedButton
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      pos = 0,-0.4
      size = 0.3,0.08
      startVal [time (s)] = 0
      text = Continue
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  Routine surveyQuestion
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    CodeComponent surveyQLogic
      Code Type = Both
      Begin JS Routine:
        is_text_type = (qtype === "text");
        selected_choice = "";
        prevYesState = false;
        prevNoState = false;
        prevContinueState = false;
        textAnswerBox.reset();
      Begin Routine:
        is_text_type = (qtype == 'text')
        selected_choice = ''
        prevYesState = False
        prevNoState = False
        prevContinueState = False
        textAnswerBox.reset()
      Each Frame:
        # Show only the relevant input widget
        textAnswerBox.opacity = 1.0 if is_text_type else 0.0
        yesButton.opacity = 0.0 if is_text_type else (1.0 if selected_choice != 'Yes' else 0.6)
        noButton.opacity = 0.0 if is_text_type else (1.0 if selected_choice != 'No' else 0.6)

        # Choice buttons (only meaningful when not text type)
        yes_click_now = yesButton.isClicked
        no_click_now = noButton.isClicked
        if not is_text_type:
            if yes_click_now and not prevYesState:
                selected_choice = 'Yes'
            if no_click_now and not prevNoState:
                selected_choice = 'No'
        prevYesState = yes_click_now
        prevNoState = no_click_now

        # Determine current answer + whether it satisfies "answered"
        if is_text_type:
            current_answer = textAnswerBox.text
            answered = True if current_answer.strip() else False
        else:
            current_answer = selected_choice
            answered = True if selected_choice else False

        is_required = (required != 0)

        # Continue button
        continue_click_now = surveyContinueBtn.isClicked
        surveyContinueBtn.opacity = 1.0 if (answered or not is_required) else 0.35
        if continue_click_now and not prevContinueState and (answered or not is_required):
            thisExp.addData('survey_' + qid, current_answer)
            continueRoutine = False
        prevContinueState = continue_click_now
      Each JS Frame:
        textAnswerBox.opacity = is_text_type ? 1.0 : 0.0;
        yesButton.opacity = is_text_type ? 0.0 : (selected_choice !== 'Yes' ? 1.0 : 0.6);
        noButton.opacity = is_text_type ? 0.0 : (selected_choice !== 'No' ? 1.0 : 0.6);
        yesButton.fillColor = (selected_choice === 'Yes') ? 'green' : 'darkgrey';
        noButton.fillColor = (selected_choice === 'No') ? 'green' : 'darkgrey';
        yes_click_now = yesButton.isClicked;
        no_click_now = noButton.isClicked;
        if (!is_text_type) {
            if (yes_click_now && !prevYesState) {
                selected_choice = 'Yes';
            }
            if (no_click_now && !prevNoState) {
                selected_choice = 'No';
            }
        }
        prevYesState = yes_click_now;
        prevNoState = no_click_now;
        if (is_text_type) {
            current_answer = textAnswerBox.text;
            answered = current_answer.trim() ? true : false;
        } else {
            current_answer = selected_choice;
            answered = selected_choice ? true : false;
        }
        is_required = (required !== 0);
        continue_click_now = surveyContinueBtn.isClicked;
        surveyContinueBtn.opacity = (answered || !is_required) ? 1.0 : 0.35;
        if (continue_click_now && !prevContinueState && (answered || !is_required)) {
            psychoJS.experiment.addData('survey_' + qid, current_answer);
            continueRoutine = false;
        }
        prevContinueState = continue_click_now;
    TextComponent qText
      letterHeight = 0.05
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text [set every repeat] = $qtext
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    TextboxComponent textAnswerBox
      bold = False
      editable = True
      formattingSyntax = md
      letterHeight = 0.05
      size = (0.8, 0.15)
      startVal [time (s)] = 0.0
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    ButtonComponent yesButton
      bold = True
      forceEndRoutine = False
      letterHeight = 0.05
      pos = (-0.2, 0)
      size = (0.3, 0.1)
      startVal [time (s)] = 0
      text = Yes
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    ButtonComponent noButton
      bold = True
      forceEndRoutine = False
      letterHeight = 0.05
      pos = (0.2, 0)
      size = (0.3, 0.1)
      startVal [time (s)] = 0
      text = No
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    ButtonComponent surveyContinueBtn
      bold = True
      forceEndRoutine = False
      letterHeight = 0.05
      pos = (0, -0.4)
      size = (0.3, 0.08)
      startVal [time (s)] = 0
      text = Continue
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  Routine mainTrial_2
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    CodeComponent mainLogic_2
      Code Type = JS
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      Begin JS Experiment:
        trialCounter = 0;
        totalTrials = 88;
      Begin JS Routine:
        trialCounter += 1;
        counterText = `${trialCounter} / ${totalTrials}`;
        rating = 0;
        response_given = false;
        rt_clock = new util.Clock();

        nPlays = 0;
        maxPlays = 2;
        replay_used = false;
        autoPlayed = false;

        console.log('Trial file:', stimFile);
      Each JS Frame:
        if (!autoPlayed && t >= 0.3) {
            mainSound_2.play();
            autoPlayed = true;
            nPlays += 1;
        }

        // replay via SPACE, limited to one
        if (nPlays < maxPlays && key_space_4.getKeys({keyList: ['space'], waitRelease: false}).length > 0) {
            mainSound_2.play();
            nPlays += 1;
            replay_used = true;
        }

        // response

        slider_rating = mainSlider_2.getRating();

        if (slider_rating !== undefined && slider_rating !== null && nPlays > 0) {
            rating = slider_rating;
            response_given = true;
        } else {
            response_given = false;
        }

        continueBtn_7.opacity = (response_given ? 1.0 : 0.35);

        if (continueBtn_7.isClicked && response_given) {
            psychoJS.experiment.addData("rating", rating);
            psychoJS.experiment.addData("rt_sec", util.round(rt_clock.getTime(), 4));
            psychoJS.experiment.addData("replay_used", replay_used);
            psychoJS.experiment.addData("nPlays", nPlays);
            continueRoutine = false;
        }
      End JS Routine:
        mainSound_2.stop()
    SoundComponent mainSound_2
      forceEndRoutine = False
      sound [set every repeat] = $stimFile
      startVal [condition] = false
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    MouseComponent mouse_3
      forceEndRoutineOnPress = never
      saveMouseState = never
      saveParamsClickable [set every repeat] = name,
      startVal [time (s)] = 0.0
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    SliderComponent mainSlider_2
      fillColor = green
      font = Noto Sans
      forceEndRoutine = False
      granularity = 0
      labels = "No vocal fry", "Very strong \nvocal fry"
      letterHeight = 0.05
      pos = (0.0, -0.15)
      size = (1, 0.05)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (0,100)
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    ButtonComponent continueBtn_7
      bold = True
      forceEndRoutine = False
      letterHeight = 0.05
      pos = 0,-0.4
      size = 0.3,0.08
      startVal [time (s)] = 0
      text = Continue
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    TextComponent trialCounterText_2
      color = grey
      letterHeight = 0.03
      pos = (0, 0.45)
      startVal [time (s)] = 0.0
      text [set every repeat] = $counterText
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    TextComponent mainText_2
      letterHeight = 0.05
      pos = (0, 0.25)
      startVal [time (s)] = 0.0
      text = Select whether you hear vocal fry, and if yes, how strong it is.
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    TextComponent spaceHint_2
      letterHeight = 0.02
      pos = (0, 0.15)
      startVal [time (s)] = 0.0
      text = Press SPACE to replay the syllable. You can only replay it once.
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    KeyboardComponent key_space_4
      allowedKeys = 'space'
      forceEndRoutine = False
      startVal [time (s)] = 0
      store = nothing
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Flow
  Routine welcomeRoutine
  LoopInitiator introLoop loopType="TrialHandler"
    conditionsFile = conditions/introduction.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [{'introFile': 'introductory_stimuli/creak_f_1.wav', 'introText': 'This is an example of vocal fry. (1 of 6)'},
      {'introFile': 'introductory_stimuli/creak_m_1.wav', 'introText': 'This is another example of vocal fry. (2 of 6)'},
      {'introFile': 'introductory_stimuli/creak_f_2.wav', 'introText': 'This is another example of vocal fry. (3 of 6)'},
      {'introFile': 'introductory_stimuli/creak_m_2.wav', 'introText': 'This is another example of vocal fry. (4 of 6)'},
      {'introFile': 'introductory_stimuli/creak_f_3.wav', 'introText': 'This is another example of vocal fry. (5 of 6)'},
      {'introFile': 'introductory_stimuli/creak_m_3.wav', 'introText': 'This is the last example of vocal fry. (6 of 6)'}]
    Routine introTrial
  LoopTerminator introLoop
  Routine trainingRoutine
  LoopInitiator trainingLoop loopType="TrialHandler"
    conditionsFile = conditions/training_sounds.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [{'trainFile': 'training_stimuli/chat_f_creaky.wav', 'stimType': 'creaky'},
      {'trainFile': 'training_stimuli/chat_f_modal.wav', 'stimType': 'modal'},
      {'trainFile': 'training_stimuli/vop_m_modal.wav', 'stimType': 'modal'},
      {'trainFile': 'training_stimuli/vop_m_creaky.wav', 'stimType': 'creaky'},
      {'trainFile': 'training_stimuli/vak_m_modal.wav', 'stimType': 'modal'},
      {'trainFile': 'training_stimuli/vak_m_creaky.wav', 'stimType': 'creaky'},
      {'trainFile': 'training_stimuli/vop_f_modal.wav', 'stimType': 'modal'},
      {'trainFile': 'training_stimuli/vop_f_creaky.wav', 'stimType': 'creaky'}]
    Routine trainingTrial
  LoopTerminator trainingLoop
  Routine mainRoutine
  LoopInitiator maleLoop loopType="TrialHandler"
    conditionsFile = conditions/male_stimuli.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'stimFile': 'stimuli_f0/tad_m_c2_p2_h-2_r1.wav'},
      {'stimFile': 'stimuli_f0/hab_m_c-1_p-3_h-3_r2.wav'},
      {'stimFile': 'stimuli_f0/hab_m_c-1_p1_h3_r1.wav'},
      {'stimFile': 'stimuli_f0/hab_m_c0_p-2_h3_r2.wav'},
      {'stimFile': 'stimuli_f0/hab_m_c0_p0_h-3_r2.wav'},
      {'stimFile': 'stimuli_f0/hab_m_c1_p-3_h-3_r3.wav'},
      {'stimFile': 'stimuli_f0/hab_m_c1_p2_h-2_r1.wav'},
      {'stimFile': 'stimuli_f0/hab_m_c2_p-3_h-1_r1.wav'},
      {'stimFile': 'stimuli_f0/hab_m_c2_p-3_h-3_r1.wav'},
      {'stimFile': 'stimuli_f0/hab_m_c2_p0_h2_r3.wav'},
      {'stimFile': 'stimuli_f0/hab_m_c2_p2_h-2_r2.wav'},
      {'stimFile': 'stimuli_f0/hab_m_c2_p2_h1_r1.wav'},
      {'stimFile': 'stimuli_f0/had_m_c-1_p3_h3_r3.wav'},
      {'stimFile': 'stimuli_f0/had_m_c-2_p2_h-2_r2.wav'},
      {'stimFile': 'stimuli_f0/had_m_c-2_p3_h0_r1.wav'},
      {'stimFile': 'stimuli_f0/had_m_c0_p1_h3_r3.wav'},
      {'stimFile': 'stimuli_f0/had_m_c1_p-1_h-3_r3.wav'},
      {'stimFile': 'stimuli_f0/had_m_c1_p1_h2_r3.wav'},
      {'stimFile': 'stimuli_f0/had_m_c1_p3_h-3_r2.wav'},
      {'stimFile': 'stimuli_f0/had_m_c2_p-2_h-3_r2.wav'},
      {'stimFile': 'stimuli_f0/had_m_c2_p-3_h2_r2.wav'},
      {'stimFile': 'stimuli_f0/had_m_c2_p2_h1_r3.wav'},
      {'stimFile': 'stimuli_f0/had_m_c2_p2_h3_r2.wav'},
      {'stimFile': 'stimuli_f0/tab_m_c-1_p-3_h3_r1.wav'},
      {'stimFile': 'stimuli_f0/tab_m_c-1_p0_h3_r3.wav'},
      {'stimFile': 'stimuli_f0/tab_m_c0_p-1_h-2_r3.wav'},
      {'stimFile': 'stimuli_f0/tab_m_c0_p-1_h-3_r2.wav'},
      {'stimFile': 'stimuli_f0/tab_m_c0_p0_h-1_r2.wav'},
      {'stimFile': 'stimuli_f0/tab_m_c0_p0_h-1_r3.wav'},
      {'stimFile': 'stimuli_f0/tab_m_c1_p-2_h-2_r2.wav'}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
    Routine mainTrial
  LoopTerminator maleLoop
  Routine breakScreen
  LoopInitiator femaleLoop loopType="TrialHandler"
    conditionsFile = conditions/female_stimuli.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'stimFile': 'stimuli_f0/hab_f_c-1_p-3_h2_r3.wav'},
      {'stimFile': 'stimuli_f0/hab_f_c-1_p2_h-3_r3.wav'},
      {'stimFile': 'stimuli_f0/hab_f_c0_p-1_h-3_r3.wav'},
      {'stimFile': 'stimuli_f0/hab_f_c0_p-1_h2_r2.wav'},
      {'stimFile': 'stimuli_f0/hab_f_c0_p0_h-1_r3.wav'},
      {'stimFile': 'stimuli_f0/hab_f_c0_p0_h-3_r2.wav'},
      {'stimFile': 'stimuli_f0/hab_f_c0_p1_h0_r2.wav'},
      {'stimFile': 'stimuli_f0/hab_f_c2_p-2_h2_r3.wav'},
      {'stimFile': 'stimuli_f0/hab_f_c2_p1_h-3_r3.wav'},
      {'stimFile': 'stimuli_f0/had_f_c-1_p-1_h-3_r1.wav'},
      {'stimFile': 'stimuli_f0/had_f_c0_p-3_h2_r3.wav'},
      {'stimFile': 'stimuli_f0/had_f_c1_p-1_h3_r2.wav'},
      {'stimFile': 'stimuli_f0/had_f_c1_p-3_h2_r2.wav'},
      {'stimFile': 'stimuli_f0/had_f_c1_p0_h1_r1.wav'},
      {'stimFile': 'stimuli_f0/had_f_c2_p-2_h-3_r2.wav'},
      {'stimFile': 'stimuli_f0/had_f_c2_p-3_h2_r1.wav'},
      {'stimFile': 'stimuli_f0/had_f_c2_p2_h-1_r1.wav'},
      {'stimFile': 'stimuli_f0/had_f_c2_p3_h-1_r1.wav'},
      {'stimFile': 'stimuli_f0/tab_f_c-2_p-1_h-1_r2.wav'},
      {'stimFile': 'stimuli_f0/tab_f_c-2_p0_h-1_r1.wav'},
      {'stimFile': 'stimuli_f0/tab_f_c-2_p1_h-1_r2.wav'},
      {'stimFile': 'stimuli_f0/tab_f_c0_p-1_h0_r1.wav'},
      {'stimFile': 'stimuli_f0/tab_f_c0_p0_h3_r1.wav'},
      {'stimFile': 'stimuli_f0/tab_f_c0_p2_h-1_r3.wav'},
      {'stimFile': 'stimuli_f0/tab_f_c1_p-3_h-3_r1.wav'},
      {'stimFile': 'stimuli_f0/tab_f_c1_p2_h3_r1.wav'},
      {'stimFile': 'stimuli_f0/tab_f_c2_p3_h3_r3.wav'},
      {'stimFile': 'stimuli_f0/tad_f_c-1_p-3_h-2_r1.wav'},
      {'stimFile': 'stimuli_f0/tad_f_c-2_p-2_h-2_r2.wav'},
      {'stimFile': 'stimuli_f0/tad_f_c0_p-1_h-3_r1.wav'}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
    Routine mainTrial_2
  LoopTerminator femaleLoop
  Routine mainFinished
  LoopInitiator surveyLoop loopType="TrialHandler"
    conditionsFile = conditions/survey_items.xlsx
    endPoints = [0,1]
    loopType = sequential
    nReps = 1
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    conditions:
      [{'qid': 'age', 'qtext': 'What is your age?', 'qtype': 'text', 'required': 1},
      {'qid': 'native_language', 'qtext': 'What is your native language?', 'qtype': 'text', 'required': 1},
      {'qid': 'hearing_difficulty', 'qtext': 'Do you have any hearing difficulties?', 'qtype': 'choice', 'required': 1},
      {'qid': 'profession', 'qtext': 'Do you work with speech or the voice in your daily life (eg., as a speech scientist/pathologist/voice coach)?', 'qtype': 'choice', 'required': 1},
      {'qid': 'vf_knowledge', 'qtext': 'Did you know about vocal fry before the experiment?', 'qtype': 'choice', 'required': 1},
      {'qid': 'synthesis_validity', 'qtext': 'Did the synthesized voices sound natural to you?', 'qtype': 'choice', 'required': 1},
      {'qid': 'comments', 'qtext': 'Do you have any comments about the experiment? (optional)', 'qtype': 'text', 'required': 0}]
    Routine surveyQuestion
  LoopTerminator surveyLoop
  Routine thankYouScreen
